nchannels_in = 1
fragsize = 64
srate = 44100
mhalib = mhachain
mha.algos = [chapro]
mha.chapro.cross_freq = [317 503 798 1265 2006 3181 5045]
mha.chapro.cr = [1.1 1.1 1.2 1.1 1.5 1.6 1.6 2.1]
mha.chapro.tk = [32 32 37 29 38 39 35 39]
mha.chapro.tkgain = [2 2 10 2 27 36 34 49]
mha.chapro.bolt = [100 100 100 100 100 100 100 100]
mha.chapro.attack = 5
mha.chapro.release = 50
mha.chapro.maxdB = 119
mha.chapro.filter_type = FIR
mha.chapro.nw = 256
mha.chapro.feedback_management = yes
mha.chapro.mu = 0.0002
mha.chapro.rho = 0.3
mha.chapro.eps = 0.0008
mha.chapro.fbg = 1
mha.chapro.sqm = 1
mha.chapro.afl = 100
mha.chapro.wfl = 0
mha.chapro.pfl = 0
mha.chapro.hdel = 0
iolib = MHAIOJackdb
io.con_in = [system:capture_1]
io.con_out = [system:playback_1]



