nchannels_in = 1
fragsize = 64
srate = 44100
mhalib = mhachain
mha.algos = [chapro_afc]
mha.chapro_afc.cross_freq = [317 503 798 1265 2006 3181 5045]
mha.chapro_afc.cr = [1.1 1.1 1.2 1.1 1.5 1.6 1.6 2.1]
mha.chapro_afc.tk = [32 32 37 29 38 39 35 39]
mha.chapro_afc.tkgain = [2 2 10 2 27 36 34 49]
mha.chapro_afc.bolt = [100 100 100 100 100 100 100 100]
mha.chapro_afc.attack = 5
mha.chapro_afc.release = 50
mha.chapro_afc.maxdB = 119
mha.chapro_afc.mu = 0.0002
mha.chapro_afc.rho = 0.3
mha.chapro_afc.eps = 0.0008
mha.chapro_afc.fbg = 1
mha.chapro_afc.sqm = 1
mha.chapro_afc.afl = 100
mha.chapro_afc.wfl = 0
mha.chapro_afc.pfl = 0
mha.chapro_afc.hdel = 0
iolib = MHAIOJackdb
io.con_in = [system:capture_1]
io.con_out = [system:playback_1]



